<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule">
        <parameter name="File names">
            <file>/home/anastasiia/Desktop/Raw/qc_20200108152234.mzML</file>
            <file>/home/anastasiia/Desktop/Raw/qc_20200107091413.mzML</file>
            <file>/home/anastasiia/Desktop/Raw/qc.mzML</file>
            <file>/home/anastasiia/Desktop/Raw/food.mzML</file>
            <file>/home/anastasiia/Desktop/Raw/blank_out.mzML</file>
            <file>/home/anastasiia/Desktop/Raw/blank_11_2.mzML</file>
            <file>/home/anastasiia/Desktop/Raw/blank_10.mzML</file>
            <file>/home/anastasiia/Desktop/Raw/blank_9_test.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Auto">
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            <module name="Auto">
                <parameter name="Noise level">100000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Auto">
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            <module name="Auto">
                <parameter name="Noise level">1000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <retention_time>
                <min>0.3</min>
                <max>10.0</max>
            </retention_time>
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Min group size in # of scans">4</parameter>
        <parameter name="Group intensity threshold">100000.0</parameter>
        <parameter name="Min highest intensity">600000.0</parameter>
        <parameter name="Scan to scan accuracy (m/z)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chroms</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="Retention time tolerance" unit="MINUTES">0.45000002</parameter>
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.002</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Limit by RT edges">true</parameter>
            <parameter name="Combine MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Lock to feature mobility range">true</parameter>
            <parameter name="Minimum merged intensity (absolute, IMS)" selected="false">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</parameter>
            <parameter name="Minimum merged intensity (relative, IMS)" selected="false">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</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.691</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.15000000596046448</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">600000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.8</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>4.500000178813934</max>
        </parameter>
        <parameter name="Min # of data points">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.05</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.2</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">13C peak</parameter>
        <parameter name="Minimum features in a row (abs or %)" selected="true">3.0</parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="true">
            <parameter name="m/z tolerance">
                <absolutetolerance>0.0015</absolutetolerance>
                <ppmtolerance>3.0</ppmtolerance>
            </parameter>
            <parameter name="Max charge">2</parameter>
            <parameter name="Estimate minimum carbon">true</parameter>
            <parameter name="Remove if 13C">true</parameter>
            <parameter name="Exclude isotopes">O</parameter>
        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">false</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gaps</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.05</parameter>
        <parameter name="Minimum data points">1</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>7.5E-4</absolutetolerance>
            <ppmtolerance>1.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.105000004</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_metacorrelate.corrgrouping.CorrelateGroupingModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="RT tolerance" unit="MINUTES">0.165</parameter>
        <parameter name="Sample set" selected="false"/>
        <parameter name="Min height">0.0</parameter>
        <parameter name="Intensity correlation threshold">100000.0</parameter>
        <parameter name="Min samples filter">
            <parameter name="Min samples in all">
                <abs>3</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min samples in group">
                <abs>0</abs>
                <rel>0.0</rel>
            </parameter>
            <parameter name="Min %-intensity overlap">0.6</parameter>
            <parameter name="Exclude estimated features (gap-filled)">true</parameter>
        </parameter>
        <parameter name="Correlation grouping" selected="true">
            <parameter name="Min data points">5</parameter>
            <parameter name="Min data points on edge">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min feature shape correlation">0.85</parameter>
            <parameter name="Min total correlation" selected="false">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</parameter>
        </parameter>
        <parameter name="Feature height correlation" selected="true">
            <parameter name="Min data points">2</parameter>
            <parameter name="Measure">PEARSON</parameter>
            <parameter name="Min correlation">0.7</parameter>
        </parameter>
        <parameter name="Suffix (or auto)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_identity_networking.ionidnetworking.IonNetworkingModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Check">ALL FEATURES</parameter>
        <parameter name="Min height">0.0</parameter>
        <parameter name="Ion identity library">
            <parameter name="MS mode">POSITIVE</parameter>
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="3" mass_difference="55.9333" mol_formula="" name="Fe" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
            </parameter>
        </parameter>
        <parameter name="Annotation refinement" selected="true">
            <parameter name="Minimum size" selected="false">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</parameter>
            <parameter name="Delete small networks without major ion">true</parameter>
            <parameter name="Delete smaller networks: Link threshold" selected="true">4</parameter>
            <parameter name="Delete networks without monomer">true</parameter>
            <parameter name="Delete rows witout ion id">false</parameter>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/home/anastasiia/Desktop/mouse_studies/01112023_more_stringent/01102023_MZmine_trial_sirius_iimn_gnps</current_file>
        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Feature intensity">Peak area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/home/anastasiia/Desktop/mouse_studies/01112023_more_stringent/01102023_MZmine_trial_sirius_sirius.mgf</current_file>
        </parameter>
        <parameter name="Merge MS/MS" selected="false">
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Renumber IDs">false</parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude empty MS/MS spectra">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
</batch>
